// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")


// ********** Components

(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid")
(Interpolator "LinearInterpolator" "LinearInterpolator")
(Metric "AdvancedMeanSquares" "TransformBendingEnergyPenalty")
(Metric0Weight 1.0)
(Metric1Weight 1000.0)
(Optimizer "GOMEA") // AdaptiveStochasticGradientDescent
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 1)
//(ImagePyramidSchedule 1)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 20.0)
//(GridSpacingSchedule 1.0)
(HowToCombineTransforms "Compose")
(UseDirectionCosines "true")


// ********** Optimizer

//(MaximumNumberOfIterations 10 5)
//(PartialEvaluations "true")
//(BasePopulationSize 30)
//(FosElementSize -6)
(FitnessVarianceTolerance 0)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")
(ASGDParameterEstimationMethod "Original")


// ********** Metric


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "Full" "Full")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
