// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMeanSquares")
(Optimizer "GOMEA") // AdaptiveStochasticGradientDescent
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 1)

// ********** Transform

(FinalGridSpacingInVoxels 15)
(HowToCombineTransforms "Compose")
(UseDirectionCosines "true")


// ********** Optimizer

(MaximumNumberOfIterations 30)
//(BasePopulationSize 30)
//(PartialEvaluations "true")
//(FosElementSize -6)

// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "Random")
(NumberOfSpatialSamples 10000)
(SamplingPercentage 0.05)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
