// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMeanSquares")
(Optimizer "AdaptiveStochasticGradientDescent") // AdaptiveStochasticGradientDescent
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)
(ImagePyramidSchedule 8 8 4 4 4 2 2 2 1)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 20.0)
(GridSpacingSchedule 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")
(UseDirectionCosines "true")


// ********** Optimizer

(MaximumNumberOfIterations 10)
(PartialEvaluations "true")
(BasePopulationSize 40)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")
(ASGDParameterEstimationMethod "Original")


// ********** Metric


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "false")
(ShowExactMetricValue "false")
(ErodeMask "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 5000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
