// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")


// ********** Components

(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid" "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid" "MovingRecursiveImagePyramid")
(Interpolator "LinearInterpolator" "LinearInterpolator")
(Metric "AdvancedMeanSquares" "TransformBendingEnergyPenalty")
(Metric0Weight 1.0)
(Metric1Weight 100.0)
(Optimizer "GOMEA") // AdaptiveStochasticGradientDescent
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "RecursiveBSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)

// ********** Transform

(FinalGridSpacingInPhysicalUnits 10.0)
(HowToCombineTransforms "Compose")
(UseDirectionCosines "true")


// ********** Optimizer

(MaximumNumberOfIterations 10)
(PartialEvaluations "true")
(FosElementSize -6)
(BasePopulationSize 30)

// ********** Several

(WriteResultImage "true")
(ShowExactMetricValue "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate" "RandomCoordinate")
(SamplingPercentage 0.5)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
