// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "LinearInterpolator")
(Metric "AdvancedMeanSquares")
(Optimizer "GOMEA") // AdaptiveStochasticGradientDescent
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 1)
(ImagePyramidSchedule 1)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 15.0)
(GridSpacingSchedule 1.0)
(HowToCombineTransforms "Compose")
(UseDirectionCosines "true")


// ********** Optimizer

(MaximumNumberOfIterations 15)
(PartialEvaluations "true")
(BasePopulationSize 2)
(Tau 0.6)
(FosElementSize -6)
(ImageDimension 2)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")
(ASGDParameterEstimationMethod "Original")


// ********** Metric


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "Full")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
